CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Resize:[module_num:5|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
    Select the input image:DNA
    Name the output image:DNA_downsample
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.5
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

Opening:[module_num:6|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
    Select the input image:DNA_downsample
    Name the output image:DNA_opening_downsample
    Structuring element:disk,35

Resize:[module_num:7|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
    Select the input image:DNA_opening_downsample
    Name the output image:DNA_opening
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:2.0
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

ImageMath:[module_num:8|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:DNA_subtract_background
    Image or measurement?:Image
    Select the first image:DNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:DNA_opening
    Multiply the second image by:1.0
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
Closing:[module_num:9|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
    Select the input image:DNA_subtract_background
    Name the output image:DNA_Closing
    Structuring element:disk,9

EnhanceEdges:[module_num:10|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
    Select the input image:DNA_Closing
    Name the output image:DNA_Edged
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    Select an edge-finding method:Sobel
    Select edge direction to enhance:All
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
ImageMath:[module_num:11|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:DNA_subtract_edges_background
    Image or measurement?:Image
    Select the first image:DNA_subtract_background
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:DNA_Edged
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:DNA_subtract_edges_background
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):3,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:15
    Suppress local maxima that are closer than this minimum allowed distance:10
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0005,1.0
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
ConvertObjectsToImage:[module_num:13|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
    Select the input objects:Nuclei
    Name the output image:NucleiMask
    Select the color format:Grayscale
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:NucleiMask
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|mask
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:bbbc022_
    Overwrite existing files without warning?:No
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