CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|svn_version:\'Unknown\'|variable_revision_number:2|show_window:False|notes:\x5B\'To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.\'\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    :
    Filter images?:Images only
    Select the rule criteria:and (extension does isimage) (directory doesnot containregexp "\x5B\\\\\\\\\\\\\\\\/\x5D\\\\\\\\.")

Metadata:[module_num:2|svn_version:\'Unknown\'|variable_revision_number:4|show_window:False|notes:\x5B\'The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.\'\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Extract metadata?:No
    Metadata data type:Text
    Metadata types:{}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>\x5BA-P\x5D\x5B0-9\x5D{2})_s(?P<Site>\x5B0-9\x5D)_w(?P<ChannelNumber>\x5B0-9\x5D)
    Regular expression to extract from folder name:(?P<Date>\x5B0-9\x5D{4}_\x5B0-9\x5D{2}_\x5B0-9\x5D{2})$
    Extract metadata from:All images
    Select the filtering criteria:and (file does contain "")
    Metadata file location:
    Match file and image metadata:\x5B\x5D
    Use case insensitive matching?:No

NamesAndTypes:[module_num:3|svn_version:\'Unknown\'|variable_revision_number:8|show_window:False|notes:\x5B\'The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.\'\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
    Match metadata:\x5B\x5D
    Image set matching method:Order
    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
    Maximum intensity:255.0
    Process as 3D?:No
    Relative pixel spacing in X:1.0
    Relative pixel spacing in Y:1.0
    Relative pixel spacing in Z:1.0
    Select the rule criteria:and (file does contain "")
    Name to assign these images:DNA
    Name to assign these objects:Cell
    Select the image type:Grayscale image
    Set intensity range from:Image metadata
    Maximum intensity:255.0

Groups:[module_num:4|svn_version:\'Unknown\'|variable_revision_number:2|show_window:False|notes:\x5B\'The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.\'\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Do you want to group your images?:No
    grouping metadata count:1
    Metadata category:None

CorrectIlluminationCalculate:[module_num:5|svn_version:\'Unknown\'|variable_revision_number:2|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:DNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Background
    Dilate objects in the final averaged image?:No
    Dilation radius:1
    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
    Approximate object diameter:10
    Smoothing filter size:10
    Retain the averaged image?:No
    Name the averaged image:IllumBlueAvg
    Retain the dilated image?:No
    Name the dilated image:IllumBlueDilated
    Automatically calculate spline parameters?:Yes
    Background mode:auto
    Number of spline points:5
    Background threshold:2.0
    Image resampling factor:2.0
    Maximum number of iterations:40
    Residual value for convergence:0.001

CorrectIlluminationApply:[module_num:6|svn_version:\'Unknown\'|variable_revision_number:3|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:DNA
    Name the output image:CorrDNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Subtract

MedianFilter:[module_num:7|svn_version:\'Unknown\'|variable_revision_number:1|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:CorrDNA
    Name the output image:FilteredDNA
    Window:3

Opening:[module_num:8|svn_version:\'Unknown\'|variable_revision_number:1|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:FilteredDNA
    Name the output image:OpeningDNA
    Structuring element:disk,5

IdentifyPrimaryObjects:[module_num:9|svn_version:\'Unknown\'|variable_revision_number:13|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:OpeningDNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,60
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:15
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
    Maximum number of objects:500
    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
    Manual threshold:0.0
    Select the measurement to threshold with:None
    Two-class or three-class thresholding?:Two classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
    Thresholding method:Otsu

ConvertObjectsToImage:[module_num:10|svn_version:\'Unknown\'|variable_revision_number:1|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:True]
    Select the input objects:Nuclei
    Name the output image:NucleiImage
    Select the color format:uint16
    Select the colormap:Default

SaveImages:[module_num:11|svn_version:\'Unknown\'|variable_revision_number:13|show_window:True|notes:\x5B\x5D|batch_state:array(\x5B\x5D, dtype=uint8)|enabled:True|wants_pause:False]
    Select the type of image to save:Image
    Select the image to save:NucleiImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
    Enter single file name:OrigBlue
    Number of digits:4
    Append a suffix to the image file name?:No
    Text to append to the image name:
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder\x7Clabels
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
    Base image folder:Elsewhere...\x7C
