CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:23
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:DNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Background
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    Block size:60
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:DNA
    Name the output image:CorrDNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Subtract

MedianFilter:[module_num:7|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
    Select the input image:CorrDNA
    Name the output image:FilteredDNA
    Window:3

Opening:[module_num:8|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
    Select the input image:FilteredDNA
    Name the output image:OpeningDNA
    Structuring element:disk,5

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:OpeningDNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,60
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Suppress local maxima that are closer than this minimum allowed distance:15
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
MaskImage:[module_num:10|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
    Select the input image:OpeningDNA
    Name the output image:MaskDNA
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:Yes

Threshold:[module_num:11|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
    Select the input image:MaskDNA
    Name the output image:ThresholdSecondStage
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.001,1.0
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
IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:MaskDNA
    Name the primary objects to be identified:Nuclei_dim
    Typical diameter of objects, in pixel units (Min,Max):20,60
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Suppress local maxima that are closer than this minimum allowed distance:15
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:Threshold_FinalThreshold_ThresholdSecondStage
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
MeasureObjectSizeShape:[module_num:13|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
    Select objects to measure:Nuclei_dim
    Calculate the Zernike features?:No

FilterObjects:[module_num:14|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
    Select the objects to filter:Nuclei_dim
    Name the output objects:FilterObjects_Nuclei_dim
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Extent
    Filter using a minimum measurement value?:Yes
    Minimum value:0.5
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:50
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_EulerNumber
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
ShrinkToObjectCenters:[module_num:15|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
    Select the input object:Nuclei
    Name the output object:ShrinkToObjectCentersNuclei

ConvertObjectsToImage:[module_num:16|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
    Select the input objects:ShrinkToObjectCentersNuclei
    Name the output image:ImageShrinkNuclei
    Select the color format:Binary (black & white)
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
ShrinkToObjectCenters:[module_num:17|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
    Select the input object:FilterObjects_Nuclei_dim
    Name the output object:ShrinkToObjectCentersNucleiDim

ConvertObjectsToImage:[module_num:18|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
    Select the input objects:ShrinkToObjectCentersNucleiDim
    Name the output image:ImageShrinkNucleiDim
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:19|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:Yes
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:ImageShrinkNuclei
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:ImageShrinkNucleiDim
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:20|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
    Select the input image:ImageAfterMath
    Name the primary objects to be identified:NucleiSeeds
    Typical diameter of objects, in pixel units (Min,Max):1,1
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.5
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
IdentifySecondaryObjects:[module_num:21|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
    Select the input objects:NucleiSeeds
    Name the objects to be identified:Nuclei2
    Select the method to identify the secondary objects:Propagation
    Select the input image:OpeningDNA
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:Threshold_FinalThreshold_ThresholdSecondStage
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
ConvertObjectsToImage:[module_num:22|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
    Select the input objects:Nuclei2
    Name the output image:NucleiImage
    Select the color format:uint16
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
SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:NucleiImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|labels
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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